<?xml version="1.0" standalone="no"?>
<monkeyml version="1.0">
    <io_devices tag="IO Devices">
        <iodevice type="mouse_input" tag="Mouse Input Device" mouse_position_x="eye_x" mouse_position_y="eye_y" mouse_down="mouse_click" hide_cursor="NO"></iodevice>
        <iodevice tag="Fake Monkey" spike_rate="" priority="" type="fake_monkey" alt="">
            <iochannel tag="Juice" variable="reward" type="juice"></iochannel>
        </iodevice>
    </io_devices>
    <variables tag="Variables">
        <folder tag="fixation">
            <variable tag="wait_fixation_time" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="5000" type="integer"></variable>
            <variable tag="fixation_duration" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="1000" type="float"></variable>
            <variable tag="eye_in_window" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="integer"></variable>
            <variable tag="fix_window" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="1" type="float"></variable>
            <variable tag="eye_x" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="float"></variable>
            <variable tag="eye_y" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="float"></variable>
        </folder>
        <variable tag="mouse_click" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="any"></variable>
        <folder tag="wedge">
            <variable tag="wedge_sizex" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="30" type="float"></variable>
            <variable tag="wedge_sizey" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="30" type="float"></variable>
        </folder>
        <folder tag="checkerboard">
            <variable tag="deg_per_sec" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="180" type="float"></variable>
            <variable tag="checkerboard_size" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="20" type="float"></variable>
        </folder>
        <folder tag="trial">
            <variable tag="failed" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="integer"></variable>
            <variable type="selection" tag="meridian_selector" values="0,1" selection="sequential" nsamples="1" sampling_method="cycles" advance_on_accept="YES" autoreset="YES"></variable>
            <variable tag="reward" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="any"></variable>
            <variable tag="success" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="integer"></variable>
            <variable tag="ignore" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="integer"></variable>
            <variable tag="nBreakFix" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="any"></variable>
            <variable tag="nConsecutiveCorrect" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="integer"></variable>
            <variable tag="reward_duration" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="any"></variable>
            <variable tag="trial_duration" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="30" type="float"></variable>
        </folder>
    </variables>
    <sounds tag="Sounds"></sounds>
    <stimuli tag="Stimuli">
        <stimulus type="fixation_point" tag="fixation_point" color="1,1,1" trigger_width="fix_window" trigger_watch_x="eye_x" trigger_watch_y="eye_y" trigger_flag="eye_in_window" x_size="0.2" y_size="0.2" x_position="0" y_position="0" rotation="0.0" alpha_multiplier="1.0"></stimulus>
        <stimulus_group tag="wedges">
            <stimulus type="image_file" tag="wedge_vm" path="vm.png" x_size="5.0" y_size="5.0" x_position="0.0" y_position="0.0" rotation="0.0" alpha_multiplier="1.0" deferred="NO"></stimulus>
            <stimulus type="image_file" tag="wedge_hm" path="hm.png" x_size="wedge_sizex" y_size="wedge_sizey" x_position="0.0" y_position="0.0" rotation="0.0" alpha_multiplier="1.0" deferred="NO"></stimulus>
        </stimulus_group>
        <stimulus type="frame_list" tag="frame_list" stimulus_group="frames" ending="" ended="" loop="YES" repeats="0" autoplay="YES"></stimulus>
        <stimulus_group tag="frames">
            <stimulus type="image_file" tag="checkerboard" path="checkerboard.png" x_size="checkerboard_size" y_size="checkerboard_size" x_position="0.0" y_position="0.0" rotation="(now() / 1e6) * deg_per_sec" alpha_multiplier="1.0" deferred="NO"></stimulus>
        </stimulus_group>
    </stimuli>
    <filters tag="Filters"></filters>
    <optimizers tag="Optimizers"></optimizers>
    <experiment tag="checkerboard_mapping" full_name="HM/VM checkerboard mapping" description="">
        <protocol tag="Mapping" nsamples="1" sampling_method="cycles" selection="random_without_replacement" interruptible="YES">
            <trial tag="Stimulate at meridian" nsamples="50" sampling_method="cycles" selection="sequential" interruptible="YES">
                <task_system tag="Keep fixation task system" interruptible="YES">
                    <task_system_state tag="Initialize stimuli and IO" interruptible="YES">
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                        <action tag="Start mouse" type="start_device_IO" device="Mouse Input Device"></action>
                        <action tag="Queue rotating checkerboard" type="live_queue_stimulus" stimulus="frame_list"></action>
                        <action tag="Queue wedge mask" type="live_queue_stimulus" stimulus="wedges[meridian_selector]"></action>
                        <action tag="Queue fixation point" type="live_queue_stimulus" stimulus="fixation_point"></action>
                        <action tag="Update display" type="update_stimulus_display" predicted_output_time=""></action>
                        <action type="start_timer" tag="Start stimulus timer" timer="stimulus_duration" timebase="" duration="trial_duration" duration_units="s"></action>
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                        <transition type="direct" tag="Go to &quot;Wait for fixation&quot;" target="Wait for fixation"></transition>
                    </task_system_state>
                    <task_system_state tag="Wait for fixation" interruptible="YES">
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                        <action type="report" tag="Report waiting" message="*** WAITING FOR FIXATION ***"></action>
                        <action type="wait_for_condition" tag="Wait for Condition" condition="eye_in_window == 1" timeout="wait_fixation_time" timeout_message="" stop_on_timeout="NO"></action>
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                        <transition type="conditional" tag="After acquiring fixation go to &quot;Keep fixation&quot;" condition="eye_in_window == 1" target="Keep fixation"></transition>
                        <transition type="timer_expired" tag="Switch stimulus after timer 1" target="Exit state system" timer="stimulus_duration"></transition>
                    </task_system_state>
                    <task_system_state tag="Keep fixation" interruptible="YES">
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                        <action type="report" tag="Report keeping fixation" message="*** KEEPING FIXATION ***"></action>
                        <action type="start_timer" tag="Start fixation timer" timer="fixation" timebase="" duration="fixation_duration" duration_units="ms"></action>
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                        <transition type="timer_expired" tag="Give reward after successful fixation" target="Give reward" timer="fixation"></transition>
                        <transition type="conditional" tag="Go to &quot;Broke fixation&quot; after fixation break" condition="(eye_in_window == 0)" target="Broke fixation"></transition>
                        <transition type="timer_expired" tag="Switch stimulus after timer 2" target="Exit state system" timer="stimulus_duration"></transition>
                    </task_system_state>
                    <task_system_state tag="Give reward" interruptible="YES">
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                        <action type="pulse" tag="Pulse Variable" variable="reward" duration="reward_duration"></action>
                        <action type="report" tag="Report keeping fixation 2" message="*** REWARD ***"></action>
                        <action type="assignment" tag="Increase consecutive corrects" variable="nConsecutiveCorrect" value="nConsecutiveCorrect+1"></action>
                        <action type="assignment" tag="Count success" variable="success" value="success+1"></action>
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                        <transition type="direct" tag="Go to &quot;Wait for fixation&quot;" target="Wait for fixation"></transition>
                    </task_system_state>
                    <task_system_state tag="Broke fixation" interruptible="YES">
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                        <action type="assignment" tag="Assign Variable" variable="failed" value="failed+1"></action>
                        <action type="assignment" tag="Reset consecutive corrects" variable="nConsecutiveCorrect" value="0"></action>
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                        <transition type="direct" tag="Go to &quot;Wait for fixation&quot;" target="Wait for fixation"></transition>
                        <transition type="timer_expired" tag="Switch stimulus after timer 3" target="Exit state system" timer="stimulus_duration"></transition>
                    </task_system_state>
                    <task_system_state tag="Exit state system" interruptible="YES">
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                        <action tag="Dequeue frame list" type="dequeue_stimulus" stimulus="frame_list"></action>
                        <action tag="Update display" type="update_stimulus_display" predicted_output_time=""></action>
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                        <transition tag="Return to parent task system" type="yield"></transition>
                    </task_system_state>
                </task_system>
            </trial>
        </protocol>
    </experiment>
</monkeyml>